PsychoPy2experiment version="2021.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'trackEyes': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Use version = latest
  Window size (pixels) = [1920, 1080]
  color = $(-0.1765, -0.1765, -0.1765)
  expName = study3
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Routines
  Routine instr1
    TextComponent text_instr1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task you will see pairs of people drumming side-by-side. For each video you will be asked to tap the drum in front of you with your dominant hand, in time with the person on the LEFT of the screen.

        Press any key to continue.
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr3
    TextComponent text_instr3
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = Most of these questions will be answered on a slider like the one below. In each case, please click and hold on the slider, and drag the marker to the desired location. When you release the mouse button your answer will be recorded and you will move to the next slide. Try this now to continue.
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    SliderComponent slider_practice
      borderColor = Black
      fillColor = Blue
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2)
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  Routine instr2
    TextComponent text_instr2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        After each video, you will be asked some questions.

        Press any key to continue.
    KeyboardComponent key_resp_3
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine tap
    MovieComponent movie_tap
      backend = moviepy
      forceEndRoutine = True
      movie [set every repeat] = $file_name
      size = [1920, 1080]
      startVal [time (s)] = 1
      stopVal [duration (s)] = 60
      units = pix
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if trackEyes == 1:
            # annotate Pupil Core
            label = "condition_start"
            duration = 0.
            condition_trigger = new_trigger(label, duration)
            condition_trigger["trial"] = blockCount
            condition_trigger["within_condition"] = within_condition
            condition_trigger["between_condition"] = between_condition
            condition_trigger["pair"] = pair
            send_trigger(condition_trigger)
      End Routine:
        if trackEyes == 1:
            # annotate Pupil Core
            label = "condition_end"
            duration = 0.
            condition_trigger = new_trigger(label, duration)
            condition_trigger["trial"] = blockCount
            condition_trigger["within_condition"] = within_condition
            condition_trigger["between_condition"] = between_condition
            condition_trigger["pair"] = pair
            send_trigger(condition_trigger)

        #win.mouseVisible = True
        psychopy.event.Mouse(visible=True)

        slider_difficulty = visual.Slider(win=win, name='slider_difficulty',
            size=(1.0, 0.1), pos=(0, -0.3), units=None,
            labels=('Very easy','Very difficult'), ticks=(1, 2), granularity=0.0,
            style='rating', styleTweaks=(), opacity=None,
            color='LightGray', fillColor='Blue', borderColor='Black', colorSpace='rgb',
            font='Open Sans', labelHeight=0.05,
            flip=False, depth=0, readOnly=False)

        slider_IOS_L = visual.Slider(win=win, name='slider_IOS_L',
            size=(.4, 0.3), pos=(0, -0.2), units=None,
            labels=None, ticks=(1, 2), granularity=0.0,
            style='rating', styleTweaks=(), opacity=0.0,
            color='LightGray', fillColor='Blue', borderColor=[0,0,0], colorSpace='rgb',
            font='Open Sans', labelHeight=0.05,
            flip=False, depth=0, readOnly=False)
        slider_IOS_L.marker = selfCircle
        slider_IOS_L.tickLines.colors = 'dimgrey'
        slider_IOS_L.markerPos = 1
        slider_IOS_L.marker.opacity = 1

        slider_connection_L = visual.Slider(win=win, name='slider_connection_L',
            size=(1.0, 0.1), pos=(0, -0.3), units=None,
            labels=('Not at all','Very connected'), ticks=(1, 2), granularity=0.0,
            style='rating', styleTweaks=(), opacity=None,
            color='LightGray', fillColor='Blue', borderColor='Black', colorSpace='rgb',
            font='Open Sans', labelHeight=0.05,
            flip=False, depth=0, readOnly=False)

        slider_liking_L = visual.Slider(win=win, name='slider_liking_L',
            size=(1.0, 0.1), pos=(0, -0.3), units=None,
            labels=('Not at all','Very much'), ticks=(1, 2), granularity=0.0,
            style='rating', styleTweaks=(), opacity=None,
            color='LightGray', fillColor='Blue', borderColor='Black', colorSpace='rgb',
            font='Open Sans', labelHeight=0.05,
            flip=False, depth=0, readOnly=False)
    TextComponent text_fixationCross
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine welcome
    TextComponent text_welcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to this study.
        Please read the following instructions carefully, as you cannot move back through the slides.

        Press any key to continue.
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        trackEyes = int(expInfo['trackEyes'])
        if expInfo['participant'] == '':
            p_num = 'test'
            in_balance = 0
        else:
            p_num = int(expInfo['participant'])
            in_balance = 1

        # if expInfo['between_condition'] == 's':
        #     between_condition = 'same'
        # else:
        #     between_condition = 'diff'

        if p_num < 37 or 109 > p_num > 72:
            if (p_num % 2) == 0: # is even
                between_condition = 'same'
            else:
                between_condition = 'diff'
        elif 36 < p_num < 73 or p_num > 108:
            if (p_num % 2) == 0: # is even
                between_condition = 'diff'
            else:
                between_condition = 'same'

        import pandas as pd
        from itertools import permutations
        from random import randint

        def stimuliGen(within_conditions, pairs, between_conditions):
            stimuli_matrix = []
            for sync in within_conditions:
                for p in pairs:
                        for inst in between_conditions:
                            filename = 'videoStim/{}_{}_{}.mp4'.format(sync, inst, p)
                            tmp = {'within_condition': sync, 'between_condition': inst, 'pair': p, 'file_name': filename}
                            stimuli_matrix.append(tmp)
            return pd.DataFrame(stimuli_matrix)

        def conditionSelector(conditions_in, pairs_in, stimuli_in, between_condition, counterbalance = 0):
            pair_select = randint(0, 719)
            if counterbalance == False:
                con_select1 = randint(0, 5)
                con_select2 = randint(0, 5)
            else:
                sel = []
                while len(sel) < 100:
                    for i in range(6):
                        for j in range(6):
                            x = [i, j]
                            sel.append(x)
                con_select1, con_select2 = sel[p_num]
            these_conditions = conditions_in[con_select1]+conditions_in[con_select2]
            these_pairs = pairs_in[pair_select]
            stimuli_selection = pd.DataFrame(columns=list(stimuli_in.columns))
            for j in range(6):
                stimulus = stimuli_in[ (stimuli_in['within_condition']==these_conditions[j]) & (stimuli_in['pair']==these_pairs[j]) & (stimuli_in['between_condition']==between_condition)]
                stimuli_selection = pd.concat([stimuli_selection,stimulus])
            return stimuli_selection

        # Create various matrices

        pairs = ['J-A', 'A-J', 'J-M', 'M-J', 'A-M', 'M-A']
        pair_perm_matrix = list(permutations(pairs))

        within_conditions = ['120-120','120-080','120-113']
        con_perm_matrix = list(permutations(within_conditions))
        between_conditions = ['same','diff']

        stimuli_matrix = stimuliGen(within_conditions, pairs, between_conditions)

        # Select a set of stimuli in a random order

        selection = conditionSelector(con_perm_matrix, pair_perm_matrix, stimuli_matrix, between_condition, counterbalance = in_balance)
        print(selection)
        selection.to_csv('conditions.csv')
        # set ths to conditions file for true randomisaton


        if trackEyes == 1:
            import zmq
            import msgpack as serializer
            from time import time
            # setup zmq context and remote helper
            ctx = zmq.Context()
            pupil_remote = zmq.Socket(ctx, zmq.REQ)
            pupil_remote.connect("tcp://localhost:50020")
            pupil_remote.send_string("PUB_PORT")
            pub_port = pupil_remote.recv_string()
            pub_socket = zmq.Socket(ctx, zmq.PUB)
            pub_socket.connect("tcp://localhost:{}".format(pub_port))
            # set time for pupil core
            time_fn = time # could replace with psychopy.core.getTime(applyZero=True)
            pupil_remote.send_string("T {}".format(time_fn()))
            print(pupil_remote.recv_string())
            def notify(notification):
                """Sends ''notification'' to Pupil Remote"""
                topic = "notify."+notification["subject"]
                payload = serializer.dumps(notification, use_bin_type=True)
                pupil_remote.send_string(topic, flags=zmq.SNDMORE)
                pupil_remote.send(payload)
                return pupil_remote.recv_string()
            def send_trigger(trigger):
                payload = serializer.dumps(trigger, use_bin_type=True)
                pub_socket.send_string(trigger["topic"], flags=zmq.SNDMORE)
                pub_socket.send(payload)
            #start annotations plugin
            notify({"subject": "start_plugin", "name": "Annotation_Capture", "args": {}})
            def new_trigger(label, duration):
                return {
                    "topic": "annotation",
                    "label": label,
                    "timestamp": time_fn(),
                    "duration": duration,
                    }
            print('pupil configured')
      Begin Routine:
        if trackEyes == 1:
            # start recording pupil
            pupil_remote.send_string("R {}_Study3".format(p_num))
            pupil_remote.recv_string()
            print('pupil recording')
      End Experiment:
        if trackEyes == 1:
            # stop recording
            pupil_remote.send_string("r")
            pupil_remote.recv_string()
            print('pupil stopped')
  Routine end
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for taking part. Please call the experimenter for further instruction.

        Press 'space' to end.
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine begin
    TextComponent text_begin
      letterHeight = 0.1
      startVal [time (s)] = 0
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      text:
        Take a short break.

        Press 'space' to begin session blockCount

        It may take a moment to load.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        blockCount = 0
        stmuliDump = [
            'movie_tap',
            'slider_liking_L',
            'slider_connection_L',
            'slider_IOS_L',
            'slider_liking_R',
            'slider_connection_R',
            'slider_IOS_R',
            'slider_difficulty'
            ]
      Begin Routine:
        blockCount = blockCount + 1
        if blockCount == 1:
            text_begin = visual.TextStim(win=win, name='text_begin',
                text="We are now ready to start. Remember to tap the drum in time with the person on the left.\n\nPress 'space' to begin the first session.\n\nIt may take a moment to load.",
                font='Arial',
                pos=(0, 0), height=0.05, wrapWidth=None, ori=0,
                color='white', colorSpace='rgb', opacity=1,
                languageStyle='LTR',
                depth=0.0);
        else:
            text_begin = visual.TextStim(win=win, name='text_11',
                text="Take a short break.\n\nPress 'space' to begin session {} out of 6.".format(blockCount),
                font='Arial',
                pos=(0, 0), height=0.05, wrapWidth=None, ori=0,
                color='white', colorSpace='rgb', opacity=1,
                languageStyle='LTR',
                depth=0.0);


        # how do I unload these sliders so they don't eat my memory?
        del slider_liking_L
        del slider_connection_L
        del slider_IOS_L
        del slider_difficulty

        """
        try:
            movie_tap
        except NameError:
            print('not there')
        else:
            movie_tap._unload()

        try:
            slider_liking_L
        except NameError:
            print('not there')
        else:
            slider_liking_L._unload()

        try:
            slider_connection_L
        except NameError:
            print('not there')
        else:
            slider_connection_L._unload()


        try:
            slider_IOS_L
        except NameError:
            print('not there')
        else:
            slider_IOS_L._unload()

        try:
            slider_liking_R
        except NameError:
            print('not there')
        else:
            slider_liking_R._unload()

        try:
            slider_connection_R
        except NameError:
            print('not there')
        else:
            slider_connection_R._unload()

        try:
            slider_IOS_R
        except NameError:
            print('not there')
        else:
            slider_IOS_R._unload()

        try:
            slider_difficulty
        except NameError:
            print('not there')
        else:
            slider_difficulty._unload()
        """

        # something wrong with this. how to stop?

        #movie_tap._unload()
        #win.clearBuffer()
      End Routine:
        print('begin block '+str(blockCount))

        #win.mouseVisible = False
        psychopy.event.Mouse(visible=False)
  Routine difficulty
    SliderComponent slider_difficulty
      borderColor = Black
      fillColor = Blue
      forceEndRoutine = True
      granularity = 0
      labels = ('Very easy','Very difficult')
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2)
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    TextComponent text_difficulty
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Please rate the difficulty of the task.
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  Routine instr4
    TextComponent text_instr4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In addition to these sliders, sometimes you will also be asked to indicate your response using circles on the screen that you can drag into position.

        Press any key to continue.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr7
    TextComponent text_instr7
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        There will be six videos, each of one minute in length. These videos are taken from a standard set of stimuli for use in research.

        Please take a moment to get comfortable with the drum. On the next slide you will see an example of the stimuli, except with only one drummer.

        Press any key to continue.
    KeyboardComponent key_resp_8
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine instr5
    TextComponent text_instr5
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        For these questions, you will see a circle like this on the right. When you click on or near the "A" circle, a "B" circle will appear.

        Press any key to continue.
    KeyboardComponent key_resp_9
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image
      image = circleA.png
      pos = (0.2, -0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine instr6
    TextComponent text_instr6
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
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      text:
        Once the "B" circle appears, keep holding down the mouse button, and drag the circle into the appropriate position. Your response is recorded when you release the mouse button. Try this on the next slide.

        Press any key to continue.
    ImageComponent image_2
      image = circleA.png
      pos = (0.2, -0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent image_3
      image = circleB.png
      pos = (-0.2, -0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_10
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_IOS
    SliderComponent slider_IOS
      borderColor = $[0,0,0]
      fillColor = Blue
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.05
      opacity = 0
      pos = (0, -0.2)
      size = (.4, 0.3)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2)
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        selfCircle = visual.ImageStim(
            win=win,
            name='image',
            image='circleB.png', mask=None,
            ori=0, pos=(0, 0), size=(0.5, 0.5),
            color=[1,1,1], colorSpace='rgb', opacity=1,
            flipHoriz=False, flipVert=False,
            texRes=128, interpolate=True, depth=-2.0)

        otherCircle = visual.ImageStim(
            win=win,
            name='image',
            image='circleA.png', mask=None,
            ori=0, pos=(0, 0), size=(0.5, 0.5),
            color=[1,1,1], colorSpace='rgb', opacity=1,
            flipHoriz=False, flipVert=False,
            texRes=128, interpolate=True, depth=-2.0)

        selfCircle.opacity = 1
        slider_IOS.marker = selfCircle
        slider_IOS.tickLines.colors = 'dimgrey'
        slider_IOS.markerPos = 1
        slider_IOS.marker.opacity = 1
    ImageComponent image_IOS
      image = circleA.png
      pos = (0.2, -0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text_IOS
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Click next to the "A" circle and drag the "B" circle into the desired position. When you release the mouse button, your answer will be recorded and you will move to the next slide.
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    TextComponent text_2
      color = Blue
      letterHeight = 0.05
      opacity = 0
      pos = (-0.15, -0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      text = Press here!
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  Routine liking_L
    SliderComponent slider_liking_L
      borderColor = Black
      fillColor = Blue
      forceEndRoutine = True
      granularity = 0
      labels = ('Not at all','Very much')
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0
      styles = rating
      ticks = (1, 2)
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    TextComponent text_liking_L
      letterHeight = 0.05
      startVal [time (s)] = 0
      text = Please rate how much you like the person on the LEFT.
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  Routine liking_R
    SliderComponent slider_liking_R
      borderColor = Black
      fillColor = Blue
      forceEndRoutine = True
      granularity = 0
      labels = ('Not at all','Very much')
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = rating
      ticks = (1, 2)
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    TextComponent text_liking_R
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Please rate how much you like the person on the RIGHT.
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  Routine connection_L
    SliderComponent slider_connection_L
      borderColor = Black
      fillColor = Blue
      forceEndRoutine = True
      granularity = 0
      labels = ('Not at all','Very connected')
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0
      styles = rating
      ticks = (1, 2)
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    TextComponent text_connection_L
      letterHeight = 0.05
      startVal [time (s)] = 0
      text = Please rate how connected you felt to the person on the LEFT.
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  Routine connection_R
    SliderComponent slider_connection_R
      borderColor = Black
      fillColor = Blue
      forceEndRoutine = True
      granularity = 0
      labels = ('Not at all','Very connected')
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = rating
      ticks = (1, 2)
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    TextComponent text_connection_R
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Please rate how connected you felt to the person on the RIGHT.
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  Routine IOS_L
    SliderComponent slider_IOS_L
      borderColor = $[0,0,0]
      fillColor = Blue
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.05
      opacity = 0
      pos = (0, -0.2)
      size = (.4, 0.3)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2)
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        selfCircle = visual.ImageStim(
            win=win,
            name='image',
            image='selfCircle.png', mask=None,
            ori=0, pos=(0, 0), size=(0.5, 0.5),
            color=[1,1,1], colorSpace='rgb', opacity=1,
            flipHoriz=False, flipVert=False,
            texRes=128, interpolate=True, depth=-2.0)

        otherCircle = visual.ImageStim(
            win=win,
            name='image',
            image='otherCircle.png', mask=None,
            ori=0, pos=(0, 0), size=(0.5, 0.5),
            color=[1,1,1], colorSpace='rgb', opacity=1,
            flipHoriz=False, flipVert=False,
            texRes=128, interpolate=True, depth=-2.0)

        selfCircle.opacity = 1
        slider_IOS_L.marker = selfCircle
        slider_IOS_L.tickLines.colors = 'dimgrey'
        slider_IOS_L.markerPos = 1
        slider_IOS_L.marker.opacity = 1
    ImageComponent image_IOS_L
      image = otherCircle.png
      pos = (0.2, -0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text_IOS_L
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Please click next to the "other" circle and drag the "self" circle into the position that best describes your relationship to the person on the LEFT.
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  Routine IOS_R
    SliderComponent slider_IOS_R
      borderColor = $[0,0,0]
      fillColor = Blue
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.05
      opacity = 0
      pos = (0, -0.2)
      size = (.4, 0.3)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = rating
      ticks = (1, 2)
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        selfCircle = visual.ImageStim(
            win=win,
            name='image',
            image='selfCircle.png', mask=None,
            ori=0, pos=(0, 0), size=(0.5, 0.5),
            color=[1,1,1], colorSpace='rgb', opacity=1,
            flipHoriz=False, flipVert=False,
            texRes=128, interpolate=True, depth=-2.0)

        otherCircle = visual.ImageStim(
            win=win,
            name='image',
            image='otherCircle.png', mask=None,
            ori=0, pos=(0, 0), size=(0.5, 0.5),
            color=[1,1,1], colorSpace='rgb', opacity=1,
            flipHoriz=False, flipVert=False,
            texRes=128, interpolate=True, depth=-2.0)

        selfCircle.opacity = 1
        slider_IOS_R.marker = selfCircle
        slider_IOS_R.tickLines.colors = 'Gray'
        slider_IOS_R.markerPos = 1
        slider_IOS_R.marker.opacity = 1
    ImageComponent image_IOS_R
      image = otherCircle.png
      pos = (0.2, -0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text_IOS_R
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Click next to the "other" circle and drag the "self" circle into the position that best describes your relationship to the person on the RIGHT.
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  Routine recorded
    TextComponent text
      color = $(0.3569, 1.0000, -0.6314)
      letterHeight = 0.075
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Recorded!
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  Routine demo_tap
    MovieComponent demo_movie
      backend = moviepy
      forceEndRoutine = True
      movie = videoStim\demo.mov
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
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Flow
  Routine welcome
  Routine instr1
  Routine instr2
  Routine instr3
  Routine instr4
  Routine instr5
  Routine instr6
  Routine instr_IOS
  Routine instr7
  Routine demo_tap
  LoopInitiator conditions loopType="TrialHandler"
    Selected rows = 0:7
    conditionsFile = conditions.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('between_condition', 'same'), ('file_name', 'videoStim/120-120_same_A-J.mp4'), ('pair', 'A-J'), ('within_condition', '120-120')]),
      OrderedDict([('between_condition', 'same'), ('file_name', 'videoStim/120-113_same_M-J.mp4'), ('pair', 'M-J'), ('within_condition', '120-113')]),
      OrderedDict([('between_condition', 'same'), ('file_name', 'videoStim/120-080_same_A-M.mp4'), ('pair', 'A-M'), ('within_condition', '120-080')]),
      OrderedDict([('between_condition', 'same'), ('file_name', 'videoStim/120-080_same_J-A.mp4'), ('pair', 'J-A'), ('within_condition', '120-080')]),
      OrderedDict([('between_condition', 'same'), ('file_name', 'videoStim/120-113_same_J-M.mp4'), ('pair', 'J-M'), ('within_condition', '120-113')]),
      OrderedDict([('between_condition', 'same'), ('file_name', 'videoStim/120-120_same_M-A.mp4'), ('pair', 'M-A'), ('within_condition', '120-120')])]
    Routine begin
    Routine tap
    Routine liking_L
    Routine recorded
    Routine connection_L
    Routine recorded
    Routine IOS_L
    Routine recorded
    Routine difficulty
    Routine recorded
  LoopTerminator conditions
  Routine end
